PsychoPy2experiment version="2020.1.3"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['Katilimci numarasi(kendi belirlediginiz 6 haneli bir sayi)'], expName, expInfo['date'])
  Experiment info = {'Katilimci numarasi(kendi belirlediginiz 6 haneli bir sayi)': '', 'Cinsiyet': '', 'Yas': '', 'Deneyi actiginiz tarayiciniz': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  expName = attention_IB
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Routines
  Routine trial
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        a = [0, 0.22,0, -0.22]
        b = [0.22, 0, -0.22, 0]
        x = 0

        random_start = [[0,0.19],[0.04,0.18574], [0.06, 0.1828], [0.10,0.16155], [0.13,0.13856],[0.15,0.11662],[0.16,0.10247],[0.18,0.06083],[0,-0.19],[0.04,-0.18574], [0.06, -0.1828], [0.10,-0.16155], [0.13,-0.13856],[0.15,-0.11662],[0.16,-0.10247],[.18,-0.06083],[0,-0.19],[-0.04,-0.18574], [-0.06, -0.1828], [-0.10,-0.16155], [-0.13,-0.13856],[-0.15,-0.11662],[-0.16,-0.10247],[-0.18,-0.06083],[0,0.19],[-0.04,0.18574], [-0.06, 0.1828], [-0.10,0.16155], [-0.13,0.13856],[-0.15,0.11662],[-0.16,0.10247],[-0.18,0.06083],
        [0,0.19],[0.04,0.18574], [0.06, 0.1828], [0.10,0.16155], [0.13,0.13856],[0.15,0.11662],[0.16,0.10247],[0.18,0.06083],[0,-0.19],[0.04,-0.18574], [0.06, -0.1828], [0.10,-0.16155], [0.13,-0.13856],[0.15,-0.11662],[0.16,-0.10247],[0.18,-0.06083],[0,-0.19],[-0.04,-0.18574], [-0.06, -0.1828], [-0.10,-0.16155], [-0.13,-0.13856],[-0.15,-0.11662],[-0.16,-0.10247],[-0.18,-0.06083],[0,0.19],[-0.04,0.18574], [-0.06, 0.1828], [-0.10,0.16155], [-0.13,0.13856],[-0.15,0.11662],[-0.16,0.10247],[-0.18,0.06083],
        [0,0.19],[0.04,0.18574], [0.06, 0.1828], [0.10,0.16155], [0.13,0.13856],[0.15,0.11662],[0.16,0.10247],[0.18,0.06083],[0,-0.19],[0.04,-0.18574], [0.06, -0.1828], [0.10,-0.16155], [0.13,-0.13856],[0.15,-0.11662],[0.16,-0.10247],[0.18,-0.06083],[0,-0.19],[-0.04,-0.18574], [-0.06, -0.1828], [-0.10,-0.16155], [-0.13,-0.13856],[-0.15,-0.11662],[-0.16,-0.10247],[-0.18,-0.06083],[0,0.19],[-0.04,0.18574], [-0.06, 0.1828], [-0.10,0.16155], [-0.13,0.13856],[-0.15,0.11662],[-0.16,0.10247],[-0.18,0.06083]]

        shuffle(random_start)

        random_stop = linspace(0.3,0.6,96)
        shuffle(random_stop)

        trial = 0;
      Begin Routine:
        pressed = False
        pressTime = float("inf")
      Each Frame:
        if pressed == False and key_resp.keys == 'space':
            pressed = True
            pressTime = t


        if t > pressTime + random_stop[trial]:
            continueRoutine = False
    PolygonComponent clock_hand
      fillColor = $[1,1,1]
      ori [set every frame] = t*140.62
      shape = line
      size = (0.2,0.2)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    PolygonComponent circle
      fillColor = $[1,1,1]
      lineWidth = 0.02
      nVertices = 100
      opacity = 0.5
      ori = 10
      shape = regular polygon...
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent min1
      fillColor = $[1,1,1]
      pos = (0, 0.21)
      shape = line
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        min1 = visual.ShapeStim(win, vertices=[[0, 0.195], [0, 0.25]],
            lineColor=[-1, -1, -1], lineWidth=2.4)
      Begin Routine:
        clock_hand = visual.ShapeStim(win, vertices=[[0, 0],random_start[trial]],
            lineColor=[-1, -1, -1], fillColor=None, lineWidth=2.2, autoLog=False)
      End Routine:
        trial = trial +1
    PolygonComponent min2
      fillColor = $[1,1,1]
      lineColor = $[-1,-1,-1]
      pos = (0.21, 0)
      shape = line
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Experiment:
        min2 = visual.ShapeStim(win, vertices=[[0.195, 0], [0.25, 0]],
            lineColor=[-1, -1, -1], lineWidth=2.4)
    PolygonComponent min3
      fillColor = $[1,1,1]
      pos = (0, -0.21)
      shape = line
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Experiment:
        min3 = visual.ShapeStim(win, vertices=[[0, -0.195], [0, -0.25]],
            lineColor=[-1, -1, -1], lineWidth=2.4)
    PolygonComponent min4
      fillColor = $[1,1,1]
      pos = (-0.21, 0)
      shape = line
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    PolygonComponent min1a
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      ori = 120
      pos = (0.122, 0.20)
      shape = line
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent min1b
      fillColor = $[1,1,1]
      lineColor = $[-1,-1,-1]
      ori = 150
      pos = (0.20, 0.122)
      shape = line
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent min2a
      fillColor = $[1,1,1]
      lineColor = $[-1,-1,-1]
      ori = 30
      pos = (0.2, -0.122)
      shape = line
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent min2b
      fillColor = $[1,1,1]
      lineColor = $[-1,-1,-1]
      ori = 60
      pos = (0.122, -0.2)
      shape = line
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent min3a
      fillColor = $[1,1,1]
      lineColor = $[-1,-1,-1]
      ori = 300
      pos = (-0.122, -0.2)
      shape = line
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent min3b
      fillColor = $[1,1,1]
      lineColor = $[-1,-1,-1]
      ori = 330
      pos = (-0.2, -0.122)
      shape = line
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent min4a
      fillColor = $[1,1,1]
      lineColor = $[-1,-1,-1]
      ori = 30
      pos = (-0.2, 0.122)
      shape = line
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent min4b
      fillColor = $[1,1,1]
      lineColor = $[-1,-1,-1]
      ori = 60
      pos = (-0.122, 0.2)
      shape = line
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    SoundComponent outcome
      sound = beep.wav
      startVal [condition] = $((pressed) and (pressTime+0.25) and (effect1 == 1) and (effect_block[act_block] == 1) and (block_random[block] == 0)) or ((pressed) and (pressTime+0.25) and (effect2 == 1) and (effect_block[act_block] == 2) and (block_random[block] == 0))
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Experiment:
        min4 = visual.ShapeStim(win, vertices=[[-0.195,0], [-0.25,0]],
            lineColor=[-1, -1, -1], lineWidth=2.4)
  Routine answer
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        clock_hand_answer = visual.ShapeStim(win, vertices =[[0,0],[0,0.22]],
            lineColor=[-1, -1, -1], fillColor=None, lineWidth=2.2, autoLog=False)


        marking = 0
      End Routine:
        marking = 1
    TextComponent answer_text
      letterHeight = 0.04
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
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      text:
        Lütfen tuşa basış yaptığınız anı saat üzerinde işaretleyin.
        Cevabınızı onaylamak için "Enter" tuşuna basınız.
    PolygonComponent circle_answer
      fillColor = $[1,1,1]
      lineWidth = 0.02
      nVertices = 100
      opacity = 0.5
      shape = regular polygon...
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    MouseComponent answer_click
      clickable = $circle_answer
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    PolygonComponent answer_stableHand
      fillColor = $[1,1,1]
      lineColor = $[-1,-1,-1]
      shape = line
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Experiment:
        answer_stableHand = visual.ShapeStim(win, vertices=[[0, 0],[0,0.19]],
            lineColor=[-1, -1, -1], fillColor=None, lineWidth=2.2)
    PolygonComponent min1ans
      fillColor = $[1,1,1]
      pos = (0, 0.21)
      shape = line
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    PolygonComponent min2ans
      fillColor = $[1,1,1]
      pos = (0.21, 0)
      shape = line
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    PolygonComponent min3ans
      fillColor = $[1,1,1]
      pos = (0, -0.21)
      shape = line
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    PolygonComponent min4ans
      fillColor = $[1,1,1]
      pos = (-0.21, 0)
      shape = line
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    CodeComponent code_17
      Code Type = Auto->JS
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      Begin Experiment:
        min1ans = visual.ShapeStim(win, vertices=[[0, 0.195], [0, 0.25]],
            lineColor=[-1, -1, -1], lineWidth=2.4)

        min2ans = visual.ShapeStim(win, vertices=[[0.195, 0], [0.25, 0]],
            lineColor=[-1, -1, -1], lineWidth=2.4)

        min3ans = visual.ShapeStim(win, vertices=[[0, -0.195], [0, -0.25]],
            lineColor=[-1, -1, -1], lineWidth=2.4)

        min4ans = visual.ShapeStim(win, vertices=[[-0.195,0], [-0.25,0]],
            lineColor=[-1, -1, -1], lineWidth=2.4)
    PolygonComponent min1aAns
      fillColor = $[1,1,1]
      lineColor = $[-1,-1,-1]
      ori = 120
      pos = (0.122, 0.20)
      shape = line
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent min1bAns
      fillColor = $[1,1,1]
      lineColor = $[-1,-1,-1]
      ori = 150
      pos = (0.20, 0.122)
      shape = line
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent min2aAns
      fillColor = $[1,1,1]
      lineColor = $[-1,-1,-1]
      ori = 30
      pos = (0.2, -0.122)
      shape = line
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent min2bAns
      fillColor = $[1,1,1]
      lineColor = $[-1,-1,-1]
      ori = 60
      pos = (0.122, -0.2)
      shape = line
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent min3aAns
      fillColor = $[1,1,1]
      lineColor = $[-1,-1,-1]
      ori = 300
      pos = (-0.122, -0.2)
      shape = line
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent min3bAns
      fillColor = $[1,1,1]
      lineColor = $[-1,-1,-1]
      ori = 330
      pos = (-0.2, -0.122)
      shape = line
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent min4aAns
      fillColor = $[1,1,1]
      lineColor = $[-1,-1,-1]
      ori = 30
      pos = (-0.2, 0.122)
      shape = line
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent min4bAns
      fillColor = $[1,1,1]
      lineColor = $[-1,-1,-1]
      ori = 60
      pos = (-0.122, 0.2)
      shape = line
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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  Routine answer_marked
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        pos = []
      Begin Routine:
        if marking == 1:
            pos = [answer_click.getPos()[0],answer_click.getPos()[1]]

        if marking > 1:
            pos = [changed_answer.getPos()[0],changed_answer.getPos()[1]]
      End Routine:
        marking = marking +1

        if marking_end.keys is "return":
            marker_change.finished = True
    TextComponent marked_answerText
      letterHeight = 0.04
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
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      text:
        Lütfen tuşa basış yaptığınız anı saat üzerinde işaretleyin.
        Cevabınızı onaylamak için "Enter" tuşuna basınız.
    PolygonComponent circle_marked
      fillColor = $[1,1,1]
      lineWidth = 0.2
      nVertices = 100
      opacity = 0.5
      shape = regular polygon...
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent marker
      fillColor = $[1,1,1]
      nVertices = 100
      pos [set every repeat] = $pos
      shape = regular polygon...
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
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    PolygonComponent marked_clockHand
      fillColor = $[1,1,1]
      lineColor = $[-1,-1,-1]
      ori [set every repeat] = 0
      shape = line
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    MouseComponent changed_answer
      clickable = $circle_marked
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    KeyboardComponent marking_end
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    PolygonComponent min1marked
      fillColor = $[1,1,1]
      pos = (0, 0.21)
      shape = line
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    PolygonComponent min2marked
      fillColor = $[1,1,1]
      pos = (0.21, 0)
      shape = line
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    PolygonComponent min3marked
      fillColor = $[1,1,1]
      pos = (0, -0.21)
      shape = line
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    PolygonComponent min4marked
      fillColor = $[1,1,1]
      pos = (-0.21, 0)
      shape = line
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    CodeComponent code_19
      Code Type = Auto->JS
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      Begin Experiment:
        min1marked = visual.ShapeStim(win, vertices=[[0, 0.195], [0, 0.25]],
            lineColor=[-1, -1, -1], lineWidth=2.4)

        min2marked = visual.ShapeStim(win, vertices=[[0.195, 0], [0.25, 0]],
            lineColor=[-1, -1, -1], lineWidth=2.4)

        min3marked = visual.ShapeStim(win, vertices=[[0, -0.195], [0, -0.25]],
            lineColor=[-1, -1, -1], lineWidth=2.4)

        min4marked = visual.ShapeStim(win, vertices=[[-0.195,0], [-0.25,0]],
            lineColor=[-1, -1, -1], lineWidth=2.4)
    PolygonComponent min1amarked
      fillColor = $[1,1,1]
      lineColor = $[-1,-1,-1]
      ori = 120
      pos = (0.122, 0.20)
      shape = line
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent min1bmarked
      fillColor = $[1,1,1]
      lineColor = $[-1,-1,-1]
      ori = 150
      pos = (0.20, 0.122)
      shape = line
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent min2amarked
      fillColor = $[1,1,1]
      lineColor = $[-1,-1,-1]
      ori = 30
      pos = (0.2, -0.122)
      shape = line
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent min2bmarked
      fillColor = $[1,1,1]
      lineColor = $[-1,-1,-1]
      ori = 60
      pos = (0.122, -0.2)
      shape = line
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent min3amarked
      fillColor = $[1,1,1]
      lineColor = $[-1,-1,-1]
      ori = 300
      pos = (-0.122, -0.2)
      shape = line
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent min3bmarked
      fillColor = $[1,1,1]
      lineColor = $[-1,-1,-1]
      ori = 330
      pos = (-0.2, -0.122)
      shape = line
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent min4amarked
      fillColor = $[1,1,1]
      lineColor = $[-1,-1,-1]
      ori = 30
      pos = (-0.2, 0.122)
      shape = line
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent min4bmarked
      fillColor = $[1,1,1]
      lineColor = $[-1,-1,-1]
      ori = 60
      pos = (-0.122, 0.2)
      shape = line
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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  Routine low_load
    CodeComponent code_13
      Code Type = Auto->JS
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      Begin Routine:
        tStart = t
      Each Frame:
        if high == 1 or block_random[block] == 1:
            continueRoutine = False


        if t > tStart +3:
            continueRoutine = False
    TextComponent low_target1
      letterHeight = 0.05
      startVal [condition] = $act_block==0
      stopVal [duration (s)] = 3
      text [set every repeat] = $mem_target1
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    TextComponent low_target2
      letterHeight = 0.05
      startVal [condition] = $act_block==1
      stopVal [duration (s)] = 3
      text [set every repeat] = $mem_target2
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    TextComponent low_target3
      letterHeight = 0.05
      startVal [condition] = $act_block ==2
      stopVal [duration (s)] = 3
      text [set every repeat] = $mem_target3
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    TextComponent low_target4
      letterHeight = 0.05
      startVal [condition] = $act_block==3
      stopVal [duration (s)] = 3
      text [set every repeat] = $mem_target4
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    TextComponent low_target5
      letterHeight = 0.05
      startVal [condition] = $act_block == 4
      stopVal [duration (s)] = 3
      text [set every repeat] = $mem_target5
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    TextComponent low_target6
      letterHeight = 0.05
      startVal [condition] = $act_block == 5
      stopVal [duration (s)] = 3
      text [set every repeat] = $mem_target6
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  Routine high_load
    CodeComponent code_12
      Code Type = Auto->JS
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      Begin Routine:
        tStart = t
      Each Frame:
        if high == 0 or block_random[block] == 1:
            continueRoutine = False

        if t > tStart +3:
            continueRoutine = False
    TextComponent high_target1
      letterHeight = 0.05
      startVal [condition] = $act_block == 0
      stopVal [duration (s)] = 3
      text [set every repeat] = $mem_target1
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    TextComponent high_target2
      letterHeight = 0.05
      startVal [condition] = $act_block == 1
      stopVal [duration (s)] = 3
      text [set every repeat] = $mem_target2
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    TextComponent high_target3
      letterHeight = 0.1
      startVal [condition] = $act_block==2
      stopVal [duration (s)] = 3
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      text:
        Any text

        including line breaks
    TextComponent high_target4
      letterHeight = 0.5
      startVal [condition] = $act_block == 3
      stopVal [duration (s)] = 3
      text [set every repeat] = $mem_target3
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    TextComponent high_target5
      letterHeight = 0.05
      startVal [condition] = $act_block == 4
      stopVal [duration (s)] = 3
      text [set every repeat] = $mem_target5
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    TextComponent high_target6
      letterHeight = 0.05
      startVal [condition] = $act_block == 5
      stopVal [duration (s)] = 3
      text [set every repeat] = $mem_target6
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  Routine explicit_test
    CodeComponent code_14
      Code Type = Auto->JS
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      Each Frame:
        if block_random[block] == 1:
            continueRoutine=False

        if effect_block[act_block] == 1 and explicit ==0:
            continueRoutine=False

        if effect_block[act_block] == 2 and effect2 ==0:
            continueRoutine=False

        if exp[0] == 0:
            continueRoutine = False
    TextComponent slider_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Sese ne kadar sizin tuşa basmanızın sebep olduğunu hissettiniz?
        Aşağıda işaretleyin ve <Enter> tuşuna basınız.
    SliderComponent slider
      forceEndRoutine = False
      granularity = 0
      labels = "Hic","Tamamen"
      pos = (0, -0.25)
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = ['rating']
      ticks = (1, 2, 3, 4, 5,6,7,8,9)
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    KeyboardComponent slider_ending
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine warning
    CodeComponent code_15
      Code Type = Auto->JS
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      Each Frame:
        if marking < 6:
            continueRoutine = False
    TextComponent warning_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        Çok fazla deneme yaptınız.

        Lütfen emin olduktan sonra işaretleyiniz.
  Routine memory_question
    CodeComponent code_16
      Code Type = Auto->JS
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      Begin Routine:
        textFill = ''
        keyList = ['1','2','3','4','5','6','7','8','9','0']
      Each Frame:
        keys = event.getKeys()

        if keys:
                if keys[0] == 'backspace':
                    textFill = textFill[:-1]  # Deletes
                elif keys[0] == 'return':
                    continueRoutine = False
                elif keys[0] in keyList:
                    textFill+=keys[0]
                displayText.setText(textFill)  # Set new text on screen
    TextComponent mem_question_text
      letterHeight = 0.05
      pos = (0,0.4)
      startVal [time (s)] = 0.0
      text = Lütfen deneme başında gösterilen sayıyı giriniz:
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    KeyboardComponent mem_resp
      allowedKeys = '0','1','2','3','4','5','6','7','8','9','backspace'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    TextComponent displayText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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  Routine trial_beg
    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Experiment:
        block_random = [0,0,0,0,0,0,1]
        effect_block = [1,1,1,2,2,2]
        shuffle(effect_block)
        shuffle(block_random)
        block = 0;
        act_block=0;
  Routine block2_end
    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Routine:
        if block is not 1:
            continueRoutine = False
      End Routine:
        block = block +1
    TextComponent block2_endText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        2. blok bitti.

        Lütfen devam etmek için herhangi bir tuşa basınız.
  Routine block_end
    CodeComponent code_10
      Code Type = Auto->JS
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      End Routine:
        block = block + 1


        if block[random] == 0:
            act_block = act_block +1
    TextComponent block1_endText
      letterHeight = 0.05
      startVal [condition] = $block==0
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      text:
        1. blok bitti.

        Lütfen devam etmek için herhangi bir tuşa basınız.
    KeyboardComponent block1_endKey
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent block2_endTest
      letterHeight = 0.05
      startVal [condition] = $block==1
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      text:
        2. blok bitti.

        Lütfen devam etmek için herhangi bir tuşa basınız.
    TextComponent block3_endText
      letterHeight = 0.05
      startVal [condition] = $block==2
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      text:
        3. blok bitti.

        Lütfen devam etmek için herhangi bir tuşa basınız.
    TextComponent block4_endText
      letterHeight = 0.05
      startVal [condition] = $block==3
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      text:
        4. blok bitti.

        Lütfen devam etmek için herhangi bir tuşa basınız.
    TextComponent block5_end
      letterHeight = 0.05
      startVal [time (s)] = $block==4
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      text:
        Deney bitti!

        Katılımınız için teşekkürler!
  Routine fix
    TextComponent fix_cross
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine Consent
    TextComponent Consent_form
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        AYDINLATILMIŞ ONAM FORMU

        Koç Üniversitesi Psikoloji Bölümü öğretim üyesi Prof. Dr. Fuat Balcı yönetiminde yüksek lisans
        öğrencisi Merve Erdoğan tarafından aksiyon alma hissi konusunda yürütülen araştırmaya katılımınız rica olunmaktadır. Bu çalışmada katılımınız tamamen gönüllülük esasına dayanır.

        ÇALIŞMANIN ADI: Dikkat ve Aksiyon Alma Hissi

        ÇALIŞMANIN AMACI
        Koç Üniversitesi tarafından yürütülen bu çalışmanın amacı, aksiyon alma hissini kontrol
        eden bilişsel mekanizmayı araştırmaktır.

        PROSEDÜRLER
        Bu çalışmaya gönüllü katılmak istemeniz halinde yürütülecek çalışmalar şöyledir;
        Yaklaşık 45 dakikalık bilgisayar üzerinde yapılacak olan bir davranış deneyine katılmanız
        beklenmektedir. Bu çalışmada sizden bir tuşa basmanız ve sonrasında oluşan sese sizin sebep olup olmadığınızı değerlendirmeniz istenmektedir.

        Onam formunun devamı için herhangi bir tuşa basınız.
    KeyboardComponent Consent_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Consent2
    TextComponent Consent_text2
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        OLASI RİSKLER VE RAHATSIZLIKLAR
        Deneyin risk ya da rahatsızlığı yoktur.

        TOPLUMA VE/VEYA DENEKLERE OLASI FAYDALARI
        Bu çalışmanın amacı aksiyon alma hissini kontrol eden bilişsel mekanizmayı ve etkileyen faktörleri
        araştırmaktır. Çalışmanın sonuçları, bu mekanizma hakkında topluma bilgi sağlayacaktır.

        GİZLİLİK
        Bu çalışmayla bağlantılı olarak elde edilen ve sizinle özdeşleşmiş her bilgi gizli kalacak, kişilerle
        paylaşılmayacak ve yalnızca sizin izniniz veya kanunun gerektirdiği ölçüde ifşa edilecektir. Gizlilik
        tanımlanmış bir kodlama prosedürüyle sağlanacak ve kod çözümüne erişim yalnızca çalışmanın
        sorumlusu araştırmacıyla sınırlı kalacaktır. Tüm veriler, sınırlı erişime sahip güvenli ve şifreli bir
        veri tabanında tutulacaktır.

        Onam formunun devamı için herhangi bir tuşa basınız.
    KeyboardComponent consent_resp2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Consent3
    TextComponent Consent_text3
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        KATILIM VE AYRILMA
        Bu çalışmanın içinde olmak isteyip istemediğinize tamamı ile bağımsız ve etki altında kalmadan
        karar verebilirsiniz. Bu çalışmaya gönüllü olarak katılmaya karar vermeniz halinde dahi, sahip
        olduğunuz herhangi bir hakkı kaybetmeden veya herhangi bir cezaya maruz kalmadan istediğiniz
        zaman çekilebilirsiniz. Çalışmadan çekilmek isterseniz bir cezası yoktur ve sahip olduğunuz
        faydaları kaybetmezsiniz.

        ARAŞTIRMACILARIN KİMLİĞİ
        Bu araştırma ile ilgili herhangi bir sorunuz veya endişeniz varsa, lütfen iletişime geçiniz:
        Prof. Dr. Fuat Balcı
        Koç Üniversitesi
        T: 0212 338 1138
        E: fbalci@ku.edu.tr
        Merve Erdoğan
        Koç Üniversitesi
        E: merdogan19@ku.edu.tr

        Yukarıda açıklanan prosedürleri anladım. Sorularım tatmin olacağım şekilde yanıtlandı ve dilediğim
        zaman ayrılma hakkım saklı kalmak koşulu ile bu çalışmaya katılmayı onaylıyorum diyorsanız ‘e’ tuşuna, deneyden çekilmek için ‘h’ tuşuna basınız.
    KeyboardComponent consent_resp3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instruction
    TextComponent instruction_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Merhaba!

        Bu deneyde bazı denemelerde ekranda bir sayı belirecek ve bu sayıyı deneme sonuna kadar
        aklınızda tutmanız istenecek.

        Deneme esnasında, ekranda saat kolu dönen bir saat belirecek.
        Bu esnada istediğiniz herhangi bir an "SPACE" tuşuna basmanız ve sonrasında
        tuşa bastığınız an saat kolunun kaçı gösterdiğini belirtmeniz istenecek.

        Devam etmek için herhangi bir tuşa basınız.
    KeyboardComponent instruction_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instruction1b
    TextComponent instruction_textb
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Tuşa basış bazı denemelerde bir sese sebep olacak bazı denemelerde olmayacak.

        Bazı denemelerde tuşa basış anınıza ek olarak tuşa basışın ses oluşumuna sebep olduğunu ne kadar hissettiğinizi değerlendirmeniz istenecek.

        Her denemenin sonunda, eğer o deneme başında size sayı gösterilmişse bu sayıyı girmeniz istenecek.

        Bu sayıyı mümkün olduğunca doğru şekilde hatırlayıp yazmaya çalışmanız bekleniyor olacak.

        Devam etmek için herhangi bir tuşa basınız.
    KeyboardComponent instruction_respb
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instruction2
    TextComponent instruction_text2
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        ÖNEMLİ HATIRLATMA!

        Deneme esnasında saat üzerinde tuşa basış yapacağınız anı önceden belirlememelisiniz.

        Deneye başlamak için bilgisayarınızdan ses duyabildiğinize emin olun
        ve bilgisayarın sesini 40 olarak ayarlayın lütfen.

        Hazırsanız boşluk tuşuna basarak deneyi başlatabilirsiniz.
    KeyboardComponent instruction_resp2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial_start
    CodeComponent code_18
      Code Type = Auto->JS
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      Begin Experiment:
        block_random = [0,0,0,0,0,0,1]
        effect_block = [1,1,1,2,2,2]
        shuffle(effect_block)
        shuffle(block_random)
        block = 0;
        act_block=0;
Flow
  Routine Consent
  Routine Consent2
  Routine Consent3
  Routine instruction
  Routine instruction1b
  Routine instruction2
  LoopInitiator blocks loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 5
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    LoopInitiator condition loopType="TrialHandler"
      conditionsFile = conditions.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('effect1', 1), ('effect2', 0), ('high', 1), ('explicit', 0), ('mem_target1', 9463518), ('mem_target2', 9433633), ('mem_target3', 9210338), ('mem_target4', 2859391), ('mem_target5', 8210211), ('mem_target6', 3478394)]),
        OrderedDict([('effect1', 1), ('effect2', 0), ('high', 1), ('explicit', 0), ('mem_target1', 4536784), ('mem_target2', 9862546), ('mem_target3', 9231901), ('mem_target4', 4122111), ('mem_target5', 1192874), ('mem_target6', 5375932)]),
        OrderedDict([('effect1', 1), ('effect2', 0), ('high', 1), ('explicit', 0), ('mem_target1', 9453627), ('mem_target2', 7562665), ('mem_target3', 1091832), ('mem_target4', 5459433), ('mem_target5', 9274571), ('mem_target6', 7348654)]),
        OrderedDict([('effect1', 1), ('effect2', 0), ('high', 1), ('explicit', 0), ('mem_target1', 3748290), ('mem_target2', 9384901), ('mem_target3', 4892011), ('mem_target4', 9281212), ('mem_target5', 9011190), ('mem_target6', 2783492)]),
        OrderedDict([('effect1', 1), ('effect2', 0), ('high', 1), ('explicit', 0), ('mem_target1', 5672835), ('mem_target2', 9039242), ('mem_target3', 1028732), ('mem_target4', 3489345), ('mem_target5', 5653874), ('mem_target6', 7348658)]),
        OrderedDict([('effect1', 1), ('effect2', 0), ('high', 1), ('explicit', 0), ('mem_target1', 9284751), ('mem_target2', 8543070), ('mem_target3', 8573721), ('mem_target4', 8939032), ('mem_target5', 1238439), ('mem_target6', 2742323)])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
      Routine trial_start
      Routine fix
      Routine high_load
      Routine low_load
      Routine trial
      Routine answer
      LoopInitiator marker_change loopType="TrialHandler"
        isTrials = False
        loopType = random
        nReps = 6
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        Routine answer_marked
      LoopTerminator marker_change
      Routine warning
      Routine explicit_test
      Routine memory_question
    LoopTerminator condition
    Routine block_end
  LoopTerminator blocks
